PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['conditions/BADE_stories_task_conditions_en.csv', 'conditions/BADE_stories_task_conditions_fr.csv', 'conditions/BADE_stories_task_conditions_practice_en.csv', 'conditions/BADE_stories_task_conditions_practice_fr.csv', 'BADE_en.png', 'BADE_fr.png', 'bundle.min.js', 'button.png']
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1680, 1050]
  color = Gainsboro
  expName = BADE_stories
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine trial
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        mouse_clicked = False
        # Save the current trial
        currentTrial = 1
      Begin JS Experiment:
        mouse_clicked = false; //boulean to check if the button was pressed
        // Save the current trial
        currentTrial = 1;
        randomSliders = [];
      Begin JS Routine:
        curStatement = 1; //display first statement by default
        end_text = ""; //text of ending button
        col = new util.Color('black');
        slider1_is_initialized = false; //true when we set the color of slider1..
        slider2_is_initialized = false;
        slider3_is_initialized = false;
        slider4_is_initialized = false;
        allRatings = false; //true when the user rated on all 4 sliders

        // Save results
        trialDuration = -1

        //define sliders (defining them here fix the labels position issue)

        slider1 = new visual.Slider({"win": win, "name": "rating", "size": [1.4, 0.03], "pos": [0, 0.01], "labels": ["0%", "100%"], "ticks": [0, 100], "granularity": 0, "style": ["rating"], "color": "Gray", "font": "Arial", "flip": false, "labelHeight": 0.03, "markerColor": [-1, -1, -1], "lineColor": "White", "barSize": [1, 0.01]});
        slider2 = new visual.Slider({"win": win, "name": "rating", "size": [1.4, 0.03], "pos": [0, -0.122], "labels": ["0%", "100%"], "ticks": [0, 100], "granularity": 0, "style": ["rating"], "color": "Gray", "font": "Arial", "flip": false, "labelHeight": 0.03, "markerColor": [-1, -1, -1], "lineColor": "White", "barSize": [1, 0.01]});
        slider3 = new visual.Slider({"win": win, "name": "rating", "size": [1.4, 0.03], "pos": [0, -0.25], "labels": ["0%", "100%"], "ticks": [0, 100], "granularity": 0, "style": ["rating"], "color": "Gray", "font": "Arial", "flip": false, "labelHeight": 0.03, "markerColor": [-1, -1, -1], "lineColor": "White", "barSize": [1, 0.01]});
        slider4 = new visual.Slider({"win": win, "name": "rating", "size": [1.4, 0.03], "pos": [0, -0.38], "labels": ["0%", "100%"], "ticks": [0, 100], "granularity": 0, "style": ["rating"], "color": "Gray", "font": "Arial", "flip": false, "labelHeight": 0.03, "markerColor": [-1, -1, -1], "lineColor": "White", "barSize": [1, 0.01]});

        // Shuffle the statements
        randomSliders =
        [
            [0, "NL", sliderSub1, ["", "", ""] ],
            [1, "EL", sliderSub2, ["", "", ""] ],
            [2, "A", sliderSub3, ["", "", ""] ],
            [3, "T", sliderSub4, ["", "", ""] ]
        ];

        function shuffleArray(array) {
            for (let i = array.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
            }
        }

        shuffleArray(randomSliders);

        //Change the text according to the selected language, function SetTxtInstr()
        function SetTxtInstr(){
            if (english){
                txt_next.text = "NEXT";
                end_text = "DONE";
            }
            else{
                txt_next.text = "SUIVANT";
                end_text = "COMPLÉTÉ";
            }
        }

        SetTxtInstr();
      Begin Routine:
        import random

        curStatement = 1 #display first statement by default
        end_text = "" #text of ending button
        col = 'black'
        slider1_is_initialized = False #true when we set the color of slider1..
        slider2_is_initialized = False
        slider3_is_initialized = False
        slider4_is_initialized = False
        allRatings = False #true when the user rated on all 4 sliders

        #Save results

        trialDuration = -1

        #define sliders (defining them here fix the labels position issue)
        slider1 = visual.Slider(win=win, name='rating', size=(1.4, 0.03), pos=(0, 0.01), labels=("0%", "100%"), ticks=(0, 100), granularity=0, style=("rating"), color='Gray', font='Arial', flip = False, labelHeight= 0.03)
        slider2 = visual.Slider(win=win, name='rating', size=(1.4, 0.03), pos=(0, -0.122), labels=("0%", "100%"), ticks=(0, 100), granularity=0, style=("rating"), color='Gray', font='Arial', flip = False, labelHeight= 0.03)
        slider3 = visual.Slider(win=win, name='rating', size=(1.4, 0.03), pos=(0, -0.25), labels=("0%", "100%"), ticks=(0, 100), granularity=0, style=("rating"), color='Gray', font='Arial', flip = False, labelHeight= 0.03)
        slider4 = visual.Slider(win=win, name='rating', size=(1.4, 0.03), pos=(0, -0.38), labels=("0%", "100%"), ticks=(0, 100), granularity=0, style=("rating"), color='Gray', font='Arial', flip = False, labelHeight= 0.03)

        # Shuffle the statements
        randomSliders = [ \
            [0, "NL", sliderSub1, ["", "", ""] ],\
            [1, "EL", sliderSub2, ["", "", ""] ],\
            [2, "A", sliderSub3, ["", "", ""] ],\
            [3, "T", sliderSub4, ["", "", ""] ]]

        random.shuffle(randomSliders)

        #Change the text according to the selected language, function SetTxtInstr()
        if english:
            txt_next.text = "NEXT"
            end_text = "DONE"
        else:
            txt_next.text = "SUIVANT"
            end_text = "COMPLÉTÉ"
      Each Frame:
        #Prepare the initialisation of the sliders
        if slider1_is_initialized == False and statement1.status == STARTED:
            slider1_is_initialized  = True
            slider2_is_initialized  = True
            slider3_is_initialized  = True
            slider4_is_initialized  = True

            sliders = (slider1,slider2,slider3,slider4)
            for slider in sliders:
                try:
                    slider.marker.color = col
                    slider.marker.size = (0.025, 0.025)
                    #slider._skin.STANDARD.MARKER_COLOR = col
                    #slider._skin.MARKER_SIZE = (0.025, 0.025)
                    slider._barSize = (1, 0.01)
                    #slider.markerPos = 0.5
                    slider._onChange(True)()
                    slider._setupSlider()
                except:
                    print("An exception while initializing slider occurred")

        #Check if the user rated on all sliders
        if slider1.getRating() != None and slider2.getRating() != None and slider3.getRating() != None and slider4.getRating() != None:
            allRatings = True
        else:
            allRatings = False

        #Function that will display next instruction or go to next routine
        #Code that will display next instruction or go to next routine
        if next.contains(mouse) and mouse.getPressed()[0] == True and allRatings:
            if mouse_clicked == False:
                mouse_clicked = True
                if curStatement == 1:
                    statement2.setOpacity(1)
                    randomSliders[0][3][curStatement-1] = slider1.getRating()
                    randomSliders[1][3][curStatement-1] = slider2.getRating()
                    randomSliders[2][3][curStatement-1] = slider3.getRating()
                    randomSliders[3][3][curStatement-1] = slider4.getRating()
                    curStatement = curStatement + 1
                elif curStatement == 2:
                    statement3.setOpacity(1)
                    randomSliders[0][3][curStatement-1] = slider1.getRating()
                    randomSliders[1][3][curStatement-1] = slider2.getRating()
                    randomSliders[2][3][curStatement-1] = slider3.getRating()
                    randomSliders[3][3][curStatement-1] = slider4.getRating()
                    curStatement = curStatement + 1
                    txt_next.text = end_text
                else:
                    randomSliders[0][3][curStatement-1] = slider1.getRating()
                    randomSliders[1][3][curStatement-1] = slider2.getRating()
                    randomSliders[2][3][curStatement-1] = slider3.getRating()
                    randomSliders[3][3][curStatement-1] = slider4.getRating()
                    trialDuration = t
                    continueRoutine = False #go to next routine
        else:
            mouse_clicked = False

        #Change the color of highlighed rect
        if next.contains(mouse):
            next.opacity=0.99
            txt_next.opacity=2
        else:
            next.opacity=0.73
            txt_next.opacity=0.73

        #Display rating of each slider
            ratings = ((slider1, sliderV1), (slider2, sliderV2), (slider3, sliderV3), (slider4, sliderV4))
            for slider_ in ratings:
                if slider_[0].getRating():
                    slider_[1].text = str(int(round(slider_[0].markerPos))) + "%"
      Each JS Frame:
        //Initialize slider
        function InitializeSlider(slider){
             try {
                slider._skin.STANDARD.MARKER_COLOR = col;
                slider._skin.MARKER_SIZE = [0.025, 0.025];
                slider._barSize = [1, 0.01];
                slider._onChange(true)();
                slider._setupSlider();
            } catch (err) {}
        }

        //Change the color of highlighed rect
        function HighlightRect(rec1, txt_rec1, mouse) {
             if (rec1.contains(mouse)) {
                rec1.setOpacity(0.99);
                txt_rec1.setOpacity(2);
             }
            else{
                rec1.setOpacity(0.73);
                txt_rec1.setOpacity(0.73);
            }
        }

        //Prepare the initialisation of the sliders
        function PrepSlidersInit(){
            if (!slider1_is_initialized && statement1.status === STARTED){
                slider1_is_initialized  = true;
                slider2_is_initialized  = true;
                slider3_is_initialized  = true;
                slider4_is_initialized  = true;
                InitializeSliders();
            }
        }

        //Initialize sliders
        function InitializeSliders(){
            const array_ = [slider1,slider2,slider3,slider4];
            array_.map(x =>InitializeSlider(x));
        }

        // Check if the user rated on all sliders
        function CheckAllRatingsDone(){
            if (slider1.getRating() !== undefined && slider2.getRating() !== undefined && slider3.getRating() !== undefined && slider4.getRating() !== undefined){
                allRatings = true;
             }
         else
            allRatings = false;
        }

        //Function that will display next instruction or go to next routine
        function DisplayNext(){
            //Display next instruction
            if (next.contains(mouse) && mouse.getPressed()[0] === 1 && allRatings){
                if (!mouse_clicked){
                    mouse_clicked = true;
                    if (curStatement === 1){
                        statement2.setOpacity(1);
                        randomSliders[0][3][curStatement-1] = slider1.getRating();
                        randomSliders[1][3][curStatement-1] = slider2.getRating();
                        randomSliders[2][3][curStatement-1] = slider3.getRating();
                        randomSliders[3][3][curStatement-1] = slider4.getRating();
                        curStatement = curStatement + 1;
                    }
                    else if(curStatement === 2){
                        statement3.setOpacity(1);
                        txt_next.text = end_text;
                        randomSliders[0][3][curStatement-1] = slider1.getRating();
                        randomSliders[1][3][curStatement-1] = slider2.getRating();
                        randomSliders[2][3][curStatement-1] = slider3.getRating();
                        randomSliders[3][3][curStatement-1] = slider4.getRating();
                        curStatement = curStatement + 1;
                    }
                    else{
                        randomSliders[0][3][curStatement-1] = slider1.getRating();
                        randomSliders[1][3][curStatement-1] = slider2.getRating();
                        randomSliders[2][3][curStatement-1] = slider3.getRating();
                        randomSliders[3][3][curStatement-1] = slider4.getRating();
                        curStatement = curStatement + 1;
                        trialDuration = t
                        continueRoutine = false; //go to next routine
                     }
                }
            }
            else{
                mouse_clicked = false;
             }
        }

        //Display ratings values:
        function DisplayRating(slider_,slider_score){
            if(slider_.getRating()){
                slider_score.text = Math.round(slider_.markerPos) + "%";
            }
        }

        //Display rating of each slider
        function DisplayRatings(){
            const array1 = [[slider1, sliderV1],[slider2,sliderV2],[slider3, sliderV3], [slider4, sliderV4]];
            array1.map(x =>DisplayRating(x[0],x[1]));
        }

        PrepSlidersInit();
        CheckAllRatingsDone();
        DisplayNext();
        HighlightRect(next, txt_next, mouse);
        DisplayRatings();
      End JS Routine:
        // Save results

        //Save the order the statements were presented
        psychoJS.experiment.addData('slidersRandomized', randomSliders);

        // Reorder array
        function sortArray(a, b) {
            if (a[0] === b[0]) {
                return 0;
            }
            else {
                return (a[0] < b[0]) ? -1 : 1;
            }
        }
        randomSliders.sort(sortArray);

        for (let i=0; i<4; i++){
            let statementType = randomSliders[i][1];
            for (let j=0; j<3; j++){
                let strStatement = "statement".concat((j+1).toString(),"_", statementType);
                psychoJS.experiment.addData(strStatement, randomSliders[i][3][j]);
            }
        }

        psychoJS.experiment.addData('trialDuration', trialDuration);
        psychoJS.experiment.addData('currentTrial', currentTrial);
        currentTrial = currentTrial + 1;

        //Reset some elements for next trial
        function ResetElements(){
            statement2.setOpacity(0);
            statement3.setOpacity(0);
            const array2 = [sliderV1, sliderV2, sliderV3, sliderV4];
            array2.map(x =>x.text="");
        }

        ResetElements();
      End Routine:
        #Save the order the statements were presented
        thisExp.addData('slidersRandomized', randomSliders)

        #Reorder array
        randomSliders = sorted(randomSliders, key=lambda x: x[0])

        for i in range(0, 4):
            statementType = randomSliders[i][1]
            for j in range(0, 3):
                strStatement = "statement"+str(j+1)+"_"+ statementType
                thisExp.addData(strStatement, randomSliders[i][3][j])

        thisExp.addData('trialDuration', trialDuration)
        thisExp.addData('currentTrial', currentTrial)
        currentTrial = currentTrial + 1

        # See https://discourse.psychopy.org/t/exp-adddata-is-saving-only-one-value/14344/6
        #thisExp.nextEntry()

        #Reset some elements for next trial
        statement2.opacity=0
        statement3.opacity=0
        array2 = (sliderV1, sliderV2, sliderV3, sliderV4)
        for arr in array2:
            arr.text=""
    PolygonComponent stateBox
      fillColor = lightGrey
      lineColor = lightGrey
      pos = (0, 0.285)
      shape = rectangle
      size = (1.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent statement1
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $state1
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    TextComponent statement2
      color = $[-1,-1,-1]
      letterHeight = 0.03
      opacity [set every repeat] = 0
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text [set every repeat] = $state2
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    TextComponent statement3
      color = $[-1,-1,-1]
      letterHeight = 0.03
      opacity [set every repeat] = 0
      pos = (0, 0.21)
      startVal [time (s)] = 0.0
      text [set every repeat] = $state3
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    SliderComponent slider1
      color = Gray
      fillColor = Black
      forceEndRoutine = False
      granularity = 0
      labels = '0%','100%'
      letterHeight = 0.03
      pos = (0, 0.01)
      size = (1.4, 0.03)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0,100)
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    SliderComponent slider2
      color = Gray
      fillColor = Black
      forceEndRoutine = False
      granularity = 0
      labels = "0%", "100%"
      letterHeight = 0.03
      pos = (0, -0.122)
      size = (1.4, 0.03)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0, 1)
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    SliderComponent slider3
      color = Gray
      fillColor = Black
      forceEndRoutine = False
      granularity = 0
      labels = "0%", "100%"
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (1.4, 0.03)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0, 1)
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    SliderComponent slider4
      color = Gray
      fillColor = Black
      forceEndRoutine = False
      granularity = 0
      labels = "0%", "100%"
      letterHeight = 0.03
      pos = (0, -0.38)
      size = (1.4, 0.03)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0, 1)
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    TextComponent sliderS1
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos [set every repeat] = (slider1.pos[0],slider1.pos[1]+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $randomSliders[0][2]
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    TextComponent sliderS2
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos [set every repeat] = (slider2.pos[0],slider2.pos[1]+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $randomSliders[1][2]
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    TextComponent sliderS3
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos [set every repeat] = (slider3.pos[0],slider3.pos[1]+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $randomSliders[2][2]
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    TextComponent sliderS4
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos [set every repeat] = (slider4.pos[0],slider4.pos[1]+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $randomSliders[3][2]
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    TextComponent sliderV1
      color = black
      letterHeight = 0.02
      pos [set every repeat] = (slider1.pos[0]+0.74, slider1.pos[1])
      startVal [time (s)] = 0
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    TextComponent sliderV2
      color = black
      letterHeight = 0.02
      pos [set every repeat] = (slider2.pos[0]+0.74, slider2.pos[1])
      startVal [time (s)] = 0.0
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    TextComponent sliderV3
      color = black
      letterHeight = 0.02
      pos [set every repeat] = (slider3.pos[0]+0.74, slider3.pos[1])
      startVal [time (s)] = 0.0
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    TextComponent sliderV4
      color = black
      letterHeight = 0.02
      pos [set every repeat] = (slider4.pos[0]+0.74, slider4.pos[1])
      startVal [time (s)] = 0.0
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    ImageComponent next
      image = button.png
      opacity = 0.73
      pos = (0, -0.463)
      size = (0.25, 0.05)
      startVal [condition] = $allRatings
      texture resolution = 512
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    TextComponent txt_next
      color = $[-1,-1,-1]
      letterHeight = 0.023
      pos [set every repeat] = next.pos
      startVal [condition] = $allRatings
      text = NEXT
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    MouseComponent mouse
      clickable = next
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
      timeRelativeTo = routine
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  Routine lang
    CodeComponent code_lang
      Code Type = Both
      Before JS Experiment:
        /*
        Use danfos to convert the data into dataframe
        We will be able to make calculations on the data more easily
        and in a clearer way for a future reading of the code.
        The calculations are also similar to those with Python and Pandas,
        so it is less work.
        */

        var danfosUrl = './bundle.min.js';

        function dynamicallyLoadScript(url) {
            var script = document.createElement("script");  // create a script DOM node
            script.src = url;  // set its src to the provided URL

            document.head.appendChild(script);  // add it to the end of the head section of the page (could change 'head' to 'body' to add it to the end of the body section instead)
        }

        dynamicallyLoadScript(danfosUrl);
      Begin Experiment:
        import re
        import pandas as pd
        import os, ssl
        import json
        import datetime

        startingDate = datetime.datetime.now().strftime("%Y-%m-%d %H:%M")

        #Set french or english variable to true when the language is selected
        french = False
        english = False

        practiceConditions = ""
        trialConditions = ""

        redcapVars = []

        #Remove illegal characters in participants' name to avoid errors in filenames
        expInfo['participant'] = re.sub('[^\w_.)( -]', '', expInfo['participant'])

        #Load redcap variable
        if not os.environ.get('PYTHONHTTPSVERIFY', '') and getattr(ssl, '_create_unverified_context', None):
            try:
                ssl._create_default_https_context = ssl._create_unverified_context
                sheet_url = "https://docs.google.com/spreadsheets/d/1HKhUnueu7nKidtb37oh2HPwGXNgj5b4i6DsxrUrUOCM/edit#gid=0"
                url_1 = sheet_url.replace('/edit#gid=', '/export?format=csv&gid=')
                dfRed = pd.read_csv(url_1)
                nbCol = 9 #Change it if we change the google sheet
                for i in range(1, nbCol):
                    redcapVars.append(dfRed.iloc[0,i])
            except:
                print("An exception occurred. The redcap variables could not be found.")
      Begin JS Experiment:
        date1 = new Date().toLocaleString("en-US", {timeZone: "America/New_York"});
        d = new Date(date1);
        startingDate =  d.getFullYear() + "-" + (d.getMonth()+1) + "-" + d.getDate() + " " +
        d.getHours() + ":" + d.getMinutes();

        //Set french or english variable to true when the language is selected
        french = false;
        english = false;

        practiceConditions = "";
        trialConditions = "";

        redcapVars = [];

        //Remove illegal characters in participants' name to avoid errors in filenames
        function CheckFilename(){
           expInfo['participant']= expInfo['participant'].replace(/([^.a-z0-9]+)/gi, '-');
        }

        // Load redcap variables from Google Spreadsheet
        function LoadRedcapVars(redcapVars){
            try {
                // Retrieve data between B2 and max range
                let url = "https://docs.google.com/spreadsheets/d/e/2PACX-1vR2HrrKB78yxkxRABtTlghA1reADPaQN32V5oJ2BbRXEZOhr8YrkGDZaIVZtjqNMXWTLzeG6-xRaEBl/pub?gid=0&range=B2:AA2&output=csv";
                var xmlhttp = new XMLHttpRequest();
                xmlhttp.onreadystatechange = function () {
                    if (xmlhttp.readyState == 4) {
                        let array = xmlhttp.responseText.split(',');
                        for (let i = 0; i < array.length; i++) {
                            redcapVars.push(array[i]);
                        }
                    }
                };
                xmlhttp.open("GET", url, true);
                xmlhttp.send(null);
                return redcapVars;
            }
            catch(err) {
                console.log("Erreur while loading Redcap variables", err.message);
            }

        }

        CheckFilename();
        redcapVars = LoadRedcapVars(redcapVars);
      Begin JS Routine:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
      Each Frame:
        #Change the color of highlighed rect
        if button1.contains(mouse1):
            button1.opacity=0.99
            txt_button1.opacity=2
        else:
            button1.opacity = 0.73
            txt_button1.opacity = 0.73

        if button2.contains(mouse1):
            button2.opacity=0.99
            txt_button2.opacity=2
        else:
            button2.opacity=0.73
            txt_button2.opacity=0.73

        #Function that is going to set the chosen language
        if button1.contains(mouse1) and mouse1.getPressed()[0] == 1:
                french = True
                practiceConditions = "conditions/BADE_stories_task_conditions_practice_fr.csv"
                trialConditions = "conditions/BADE_stories_task_conditions_fr.csv"


        elif button2.contains(mouse1) and mouse1.getPressed()[0] == 1:
                english = True
                practiceConditions = "conditions/BADE_stories_task_conditions_practice_en.csv"
                trialConditions = "conditions/BADE_stories_task_conditions_en.csv"
      Each JS Frame:
        //Change the color of highlighed rect
        function HighlightRect(rec1, rec2, txt_rec1, txt_rec2, mouse) {
             if (rec1.contains(mouse)) {
                rec1.setOpacity(0.99);
                txt_rec1.setOpacity(2);
             }
            else{
                rec1.setOpacity(0.73);
                txt_rec1.setOpacity(0.73);
            }
             if (rec2.contains(mouse)) {
                rec2.setOpacity(0.99);
                txt_rec2.setOpacity(2);
             }
            else{
                rec2.setOpacity(0.73);
                txt_rec2.setOpacity(0.73);
            }
        }

        //Function that is going to set the chosen language
        function SelectLanguage(rec1, rec2, mouse){
            if (rec1.contains(mouse) && mouse.getPressed()[0] === 1 ) {
                french = true;
                practiceConditions = "conditions/BADE_stories_task_conditions_practice_fr.csv";
                trialConditions = "conditions/BADE_stories_task_conditions_fr.csv";
            }
            else if (rec2.contains(mouse) && mouse.getPressed()[0] === 1 ) {
                english = true;
                practiceConditions = "conditions/BADE_stories_task_conditions_practice_en.csv";
                trialConditions = "conditions/BADE_stories_task_conditions_en.csv";
            }
        }

        HighlightRect(button1,  button2, txt_button1, txt_button2, mouse1);
        SelectLanguage(button1,  button2, mouse1);
      End JS Routine:
        thisExp.addData("Language", english===true ? "en" : "fr");
      End Routine:
        if english==True:
            thisExp.addData("Language", "en")
        else:
            thisExp.addData("Language", "fr")
    ImageComponent button1
      image = button.png
      opacity = 0.73
      pos = (0, 0.02)
      size = (0.25, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent button2
      image = button.png
      opacity = 0.73
      pos = (0, -0.07)
      size = (0.25, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent txt_instr
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos = (0, 0.18)
      startVal [time (s)] = 0.0
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      text:
        Veuillez sélectionner votre langue.

        Please select your language.
    TextComponent txt_button1
      color = $[-1,-1,-1]
      letterHeight = 0.023
      pos [set every repeat] = button1.pos
      startVal [time (s)] = 0.0
      text = FRANÇAIS
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    TextComponent txt_button2
      color = $[-1,-1,-1]
      letterHeight = 0.023
      pos [set every repeat] = button2.pos
      startVal [time (s)] = 0.0
      text = ENGLISH
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    MouseComponent mouse1
      clickable = button1, button2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine instr
    CodeComponent code_i
      Code Type = Both
      Begin Experiment:
        #We'll set the picture depending on the language
        img_instr = ""

        end_instr_text1=""
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;

        //We'll set the picture depending on the language
        img_instr = "";

        end_instr_text1="";
      Begin JS Routine:
        curInstr = 1; //value of the current displayed instr
        instr_clicked = false; //true if we clicked on instr1
        //Change the text according to the selected language, function SetTxtInstr()
        function SetTxtInstr(){
            if (english){
                expTitle.text = "Story task";
                expEx.text = "(Example)";
                img_instr = "BADE_en.png";
                instr_text_1.text = "You will be shown three statements, presented one at a time, describing an event or person. Each new statement will provide additional information about the event or person that is being described. Below the statements, you will also see four interpretations about the event or person being described in the statement(s). Each interpretation has its own scale (from 0 - 100%), where you will be asked to rate the likelihood of each interpretation given the information described in the statement(s). Rate how well you believe each interpretation relates to the event or person described in the statement(s).";
                instr_text_1_2 = new visual.TextStim({"win": win, "color":[-1,-1,-1], "colorSpace":'rgb', "font": "Arial", "height": 0.022,"pos":[0, -0.38],"bold":true});
                instr_text_1_2.text = "It is important to rate each of the four interpretations independently from one another. Do not compare the interpretations to each other. The total of the interpretations should not necessarily equal 100%.";
                instr_text_2.text = "\n\nAs each new statement is shown, reconsider the ratings you have assigned to each interpretation. Ratings for each interpretation can be changed as much or as little as you like, or can be kept the same if you feel that they have not changed with the addition of a new statement. It is possible that none or many of the interpretations will be a good fit for the statements.\n\nYou will be using the mouse or touchpad to make your ratings. Click on 'Next' to display the next statement. After you have seen all three statements, click 'Done' to move to the next trial. You will now complete 2 practice trials before beginning the experiment.";
                txt_next_i.text = "NEXT";
            }
            else{
                expTitle.text = "Tâche d'histoires";
                expEx.text = "(Exemple)";
                img_instr = "BADE_fr.png";
                instr_text_1.text = "Trois énoncés vous seront montrés, un à la fois. Chacun décrit un événement ou une personne. Chaque nouvel énoncé apportera de l’information additionnelle à propos de l’événement ou de la personne décrit(e). Sous les énoncés, vous verrez aussi quatre interprétations de l’événement ou de la personne décrit(e) dans le(les) énoncé(s). Chaque interprétation a sa propre échelle (de 0 – 100%), vous aurez donc à évaluer la probabilité que chaque interprétation décrive l’énoncé, selon les informations données. Évaluez à quel point vous pensez que chaque interprétation se rapporte à l’évènement ou la personne décrite dans l’(les) énoncé(s).";
                instr_text_1_2 = new visual.TextStim({"win": win, "color":[-1,-1,-1], "colorSpace":'rgb', "font": "Arial", "height": 0.022,"pos":[0, -0.38],"bold":true});
                instr_text_1_2.text = "Il est important d’évaluer chacune des quatre interprétations indépendamment les unes des autres. Ne comparez pas les interprétations entres elles. Le total des interprétations ne doit pas faire nécessairement 100%.";
                instr_text_2.text = "\n\nÀ chaque nouvel énoncé présenté, reconsidérez les évaluations que vous avez assignées à chaque interprétation. Les évaluations des interprétations peuvent être changées autant que vous le voulez, vous pouvez aussi les laisser intactes, si vous avez l’impression qu’elles n'ont pas changé avec l’addition de nouveaux énoncés. Il est possible qu’aucune ou que plusieurs interprétations soi(en)t un bon pairage avec les énoncés.\n\nVous utiliserez la souris ou le pavé tactile pour faire vos évaluations. Appuyez sur ‘Suivant’ pour afficher le prochain énoncé. Après avoir vu tous les trois énoncés, appuyez sur ‘Complété’, pour accéder à l’essai suivant. Vous allez maintenant faire 2 essais de pratique, avant de commencer l’exercice.";
                txt_next_i.text = "SUIVANT";
            }
        }

        SetTxtInstr();
      Begin Routine:
        curInstr = 1 #value of the current displayed instr
        instr_clicked = False #true if we clicked on instr1
        #Change the text according to the selected language, function SetTxtInstr()
        if english:
            expTitle.text = "Story task"
            expEx.text = "(Example)"
            img_instr = "BADE_en.png"
            instr_text_1.text = "You will be shown three statements, presented one at a time, describing an event or person. Each new statement will provide additional information about the event or person that is being described. Below the statements, you will also see four interpretations about the event or person being described in the statement(s). Each interpretation has its own scale (from 0 - 100%), where you will be asked to rate the likelihood of each interpretation given the information described in the statement(s). Rate how well you believe each interpretation relates to the event or person described in the statement(s)."
            instr_text_1_2 = visual.TextStim(win=win, color=(-1,-1,-1), colorSpace='rgb', font="Arial", height=0.022, pos=(0, -0.38), bold=True)
            instr_text_1_2.text = "It is important to rate each of the four interpretations independently from one another. Do not compare the interpretations to each other. The total of the interpretations should not necessarily equal 100%."
            instr_text_2.text = "\n\nAs each new statement is shown, reconsider the ratings you have assigned to each interpretation. Ratings for each interpretation can be changed as much or as little as you like, or can be kept the same if you feel that they have not changed with the addition of a new statement. It is possible that none or many of the interpretations will be a good fit for the statements.\n\nYou will be using the mouse or touchpad to make your ratings. Click on 'Next' to display the next statement. After you have seen all three statements, click 'Done' to move to the next trial. You will now complete 2 practice trials before beginning the experiment."
            txt_next_i.text = "NEXT"
        else:
            expTitle.text = "Tâche d'histoires"
            expEx.text = "(Exemple)"
            img_instr = "BADE_fr.png"
            instr_text_1.text = "Trois énoncés vous seront montrés, un à la fois. Chacun décrit un événement ou une personne. Chaque nouvel énoncé apportera de l’information additionnelle à propos de l’événement ou de la personne décrit(e). Sous les énoncés, vous verrez aussi quatre interprétations de l’événement ou de la personne décrit(e) dans le(les) énoncé(s). Chaque interprétation a sa propre échelle (de 0 – 100%), vous aurez donc à évaluer la probabilité que chaque interprétation décrive l’énoncé, selon les informations données. Évaluez à quel point vous pensez que chaque interprétation se rapporte à l’évènement ou la personne décrite dans l’(les) énoncé(s)."
            instr_text_1_2 = visual.TextStim(win=win, color=(-1,-1,-1), colorSpace='rgb', font="Arial", height=0.022, pos=(0, -0.38), bold=True)
            instr_text_1_2.text = "Il est important d’évaluer chacune des quatre interprétations indépendamment les unes des autres. Ne comparez pas les interprétations entres elles. Le total des interprétations ne doit pas faire nécessairement 100%."
            instr_text_2.text = "\n\nÀ chaque nouvel énoncé présenté, reconsidérez les évaluations que vous avez assignées à chaque interprétation. Les évaluations des interprétations peuvent être changées autant que vous le voulez, vous pouvez aussi les laisser intactes, si vous avez l’impression qu’elles n'ont pas changé avec l’addition de nouveaux énoncés. Il est possible qu’aucune ou que plusieurs interprétations soi(en)t un bon pairage avec les énoncés.\n\nVous utiliserez la souris ou le pavé tactile pour faire vos évaluations. Appuyez sur ‘Suivant’ pour afficher le prochain énoncé. Après avoir vu tous les trois énoncés, appuyez sur ‘Complété’, pour accéder à l’essai suivant. Vous allez maintenant faire 2 essais de pratique, avant de commencer l’exercice."
            txt_next_i.text = "SUIVANT"
      Each Frame:
        #Function that will display next instruction or go to next routine
        #Display next instruction
        if next_i.contains(mouse_i) and mouse_i.getPressed()[0] == True:
            if instr_clicked == False:
                instr_clicked = True
                if curInstr == 1:
                    instr_text_1.opacity=0
                    instr_text_1_2.opacity=0
                    instr_text_2.opacity=1
                    curInstr = 2
                else:
                    continueRoutine = False #go to next routine
        else:
            instr_clicked = False

        #Change the color of highlighed rect
        if next_i.contains(mouse_i):
            next_i.opacity=0.99
            txt_next_i.opacity=2
        else:
            next_i.opacity=0.73
            txt_next_i.opacity=0.73
      Each JS Frame:
        //Function that will display next instruction or go to next routine
        function DisplayNext(){
            //Display next instruction
            if (next_i.contains(mouse_i) && mouse_i.getPressed()[0] === 1){
                if (!instr_clicked){
                    instr_clicked = true;
                    if (curInstr === 1){
                        instr_text_1.setOpacity(0);
                        instr_text_1_2.setOpacity(0);
                        instr_text_2.setOpacity(1);
                        curInstr = 2;
                        }
                    else{
                       continueRoutine = false; //go to next routine
                     }
                }
            }
            else{
                instr_clicked = false;
             }
        }

        //Change the color of highlighed rect
        function HighlightRect(rec1, txt_rec1, mouse) {
             if (rec1.contains(mouse)) {
                rec1.setOpacity(0.99);
                txt_rec1.setOpacity(2);
             }
            else{
                rec1.setOpacity(0.73);
                txt_rec1.setOpacity(0.73);
            }
        }

        HighlightRect(next_i, txt_next_i, mouse_i);

        DisplayNext();
    TextComponent expTitle
      color = $[-1,-1,-1]
      letterHeight = 0.05
      pos = (0, 0.395)
      startVal [time (s)] = 0.0
      text = Story task
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    TextComponent expEx
      color = $[-1,-1,-1]
      letterHeight = 0.018
      pos = (0, 0.345)
      startVal [time (s)] = 0.0
      text = (Example)
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    ImageComponent img_i
      image [set every repeat] = $img_instr
      pos = (0, 0.09)
      size = (0.737,0.47)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent instr_text_1
      color = $[-1,-1,-1]
      letterHeight = 0.021
      pos = (0, -0.245)
      startVal [time (s)] = 0.0
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    TextComponent instr_text_1_2
      color = $[-1,-1,-1]
      letterHeight = 0.021
      pos = (0, -0.27)
      startVal [time (s)] = 0.0
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    TextComponent instr_text_2
      color = $[-1,-1,-1]
      letterHeight = 0.021
      opacity = 0
      pos = (0, -0.245)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    ImageComponent next_i
      image = button.png
      opacity = 0.73
      pos = (0, -0.463)
      size = (0.25, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent txt_next_i
      color = $[-1,-1,-1]
      letterHeight = 0.023
      pos [set every repeat] = next_i.pos
      startVal [time (s)] = 0.0
      text = NEXT
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    MouseComponent mouse_i
      clickable = next_i
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine thanks
    CodeComponent code_thx
      Code Type = Both
      Begin JS Routine:
        //Change the text according to the selected language, function SetTxtInstr2()
        function SetTxtReady(){
            if (english){
                thx.text = "Thank you for your participation!";
            }
            else{
                thx.text = "Merci de votre participation!";
            }
        }
        function GetData(){
            try{
                let data = thisExp._trialsData;
                //console.log("data: ", data);
                /* Make array objects all have the same keys */
                let defaults = { "Language" : "", "participant" : "", "date" : "", "session": "", "expName:":"",
                "psychopyVersion": "", "OS": "", "frameRate": "", "mouse_i.x": "", "mouse_i.y": "",
                "mouse_i.leftButton": "", "mouse_i.midButton": "", "mouse_i.rightButton": "", "mouse_i.time": "",
                "mouse_i.clicked_name": "", "currentTrial" : "", "statement1_NL": "", "statement1_EL": "", "statement1_A": "", "statement1_T": "",
                "statement2_NL": "", "statement2_EL": "", "statement2_A": "", "statement2_T": "",
                "statement3_NL": "", "statement3_EL": "", "statement3_A": "", "statement3_T": "", "trialDuration": "", "Type": ""};
                data = $.map( data, function( item ){
                    return $.extend( {}, defaults, item );
                });

                // Create all the variables we will need
                let data2 = ["average_non_filler_statement1_NL", "average_non_filler_statement1_EL",
                "average_non_filler_statement1_A", "average_non_filler_statement1_T",
                "average_non_filler_statement2_NL", "average_non_filler_statement2_EL",
                "average_non_filler_statement2_A", "average_non_filler_statement2_T",
                "average_non_filler_statement3_NL", "average_non_filler_statement3_EL",
                "average_non_filler_statement3_A", "average_non_filler_statement3_T",
                "average_non_filler_trialDuration", "sBADE_evidence_integration",
                "sBADE_evidence_integration_norm_rev", "sBADE_conservatism", "sBADE_trial_duration"];

                // Add them to the data
                for (let i = 0; i < data2.length; i++) {
                    data[data2[i]] = "";
                }

                // Create our dataframe where we will compute all the values

                let df1 = new dfd.DataFrame(data);

                // Select trials (practice number is non existent)
                df1 = df1.loc({
                    rows: df1["currentTrial"].gt(0)
                });
                df1.resetIndex({ inplace: true });

                // We will compute the scores

                df1["statement1_NL"] = df1['statement1_NL'].div(100);
                df1["statement1_EL"] = df1['statement1_EL'].div(100);
                df1["statement1_A"] = df1['statement1_A'].div(100);
                df1["statement1_T"] = df1['statement1_T'].div(100);

                df1["statement2_NL"] = df1['statement2_NL'].div(100);
                df1["statement2_EL"] = df1['statement2_EL'].div(100);
                df1["statement2_A"] = df1['statement2_A'].div(100);
                df1["statement2_T"] = df1['statement2_T'].div(100);

                df1["statement3_NL"] = df1['statement3_NL'].div(100);
                df1["statement3_EL"] = df1['statement3_EL'].div(100);
                df1["statement3_A"] = df1['statement3_A'].div(100);
                df1["statement3_T"] = df1['statement3_T'].div(100);

                let sub_df = df1.iloc({
                    rows: df1["Type"].eq("non-filler")
                });
                sub_df.resetIndex({ inplace: true });

                // Compute means
                df1["average_non_filler_statement1_NL"] = sub_df["statement1_NL"].mean();
                df1["average_non_filler_statement1_EL"] = sub_df["statement1_EL"].mean();
                df1["average_non_filler_statement1_A"] = sub_df["statement1_A"].mean();
                df1["average_non_filler_statement1_T"] = sub_df["statement1_T"].mean();

                df1["average_non_filler_statement2_NL"] = sub_df["statement2_NL"].mean();
                df1["average_non_filler_statement2_EL"] = sub_df["statement2_EL"].mean();
                df1["average_non_filler_statement2_A"] = sub_df["statement2_A"].mean();
                df1["average_non_filler_statement2_T"] = sub_df["statement2_T"].mean();

                df1["average_non_filler_statement3_NL"] = sub_df["statement3_NL"].mean();
                df1["average_non_filler_statement3_EL"] = sub_df["statement3_EL"].mean();
                df1["average_non_filler_statement3_A"] = sub_df["statement3_A"].mean();
                df1["average_non_filler_statement3_T"] = sub_df["statement3_T"].mean();

                df1["average_non_filler_trialDuration"] = sub_df["trialDuration"].mean();

                // Compute sBADE evidence integration
                let sum1 = df1["average_non_filler_statement1_A"]+df1["average_non_filler_statement2_A"]+df1["average_non_filler_statement3_A"]+df1["average_non_filler_statement2_NL"]+df1["average_non_filler_statement2_EL"]+df1["average_non_filler_statement3_NL"]+df1["average_non_filler_statement3_EL"];
                df1["sBADE_evidence_integration"] = sum1-df1["average_non_filler_statement3_T"];

                //console.log("sBADE_evidence_integration", df1["sBADE_evidence_integration"]);

                // Compute sBADE_conservatism
                let sum2 = df1["average_non_filler_statement1_NL"]+df1["average_non_filler_statement1_EL"]+df1["average_non_filler_statement1_T"]+df1["average_non_filler_statement2_NL"]+df1["average_non_filler_statement2_EL"]+df1["average_non_filler_statement2_T"]+df1["average_non_filler_statement3_T"];
                df1["sBADE_conservatism"] = sum2;

                //console.log("sBADE_conservatism", df1["sBADE_conservatism"]);

                df1["sBADE_trial_duration"] = df1['average_non_filler_trialDuration'];

                /*
                Compute reverse sBADE evidence integration
                https://stackoverflow.com/questions/929103/convert-a-number-range-to-another-range-maintaining-ratio
                */
                let oldMax, oldMin, newMax, newMin, oldRange, newRange, newValue, oldValue;
                oldMax = -1; oldMin = 7; newMax = 1; newMin = 0; oldRange = oldMax-oldMin; newRange = newMax-newMin; oldValue = df1["sBADE_evidence_integration"];
                newValue = (((oldValue-oldMin)*newRange)/oldRange)+newMin;

                df1["sBADE_evidence_integration_norm_rev"] = newValue;

                //console.log("new dataframe: ", df1);

                let taskVersion = "Online_v3.1.0"; // Version of the task

                const exp_name = "iCog_BADE_stories_short";

                df1["date_exp"] = startingDate;
                df1["task_version"] = taskVersion;

                // Save dataframe inside the logfile
                psychoJS.experiment.addData('date_exp', df1["date_exp"]);
                psychoJS.experiment.addData('task_version', df1["task_version"]);
                psychoJS.experiment.addData('sBADE_evidence_integration', df1["sBADE_evidence_integration"]);
                psychoJS.experiment.addData('sBADE_evidence_integration_norm_rev', df1["sBADE_evidence_integration_norm_rev"]);
                psychoJS.experiment.addData('sBADE_conservatism', df1["sBADE_conservatism"]);
                psychoJS.experiment.addData('sBADE_trial_duration', df1["sBADE_trial_duration"]);
                return df1;
            }
            catch(err) {
                console.log("Error while computing scores.");
                dumpError(err);
            }
        }

        function REDCapImportRecord(df1) {
            try{
              const url = 'https://portal.rimuhc.ca/cim/redcap/api/';
              let testdata;
              // Warning: If we add or remove columns in the Google file, we must also change the variables here
              testdata = [{
                        record_id: df1.loc({rows: [0], columns: ["participant"]}).values[0][0],
                        [redcapVars[1]]: df1["date_exp"],
                        [redcapVars[2]]: df1["task_version"],
                        [redcapVars[3]]: df1["sBADE_evidence_integration"],
                        [redcapVars[4]]: df1["sBADE_evidence_integration_norm_rev"],
                        [redcapVars[5]]: df1["sBADE_conservatism"],
                        [redcapVars[6]]: df1["sBADE_trial_duration"]
              }];

              testdata = JSON.stringify(testdata);
              //console.log("testdata: ", testdata);

              const body = new FormData();
              body.append('token', redcapVars[0]);
              body.append('content', 'record');
              body.append('format', 'json');
              body.append('overwriteBehavior', 'normal');
              body.append('data', testdata);
              body.append('returnContent', 'ids');

              const params = {
                method: 'POST',
                body,
              }

            return fetch(url, params)
              .then(data => {
                console.log('fetch data: ', data);
              })
              .catch(error => console.log('Error: ', error))

            }
            catch(err) {
              console.log("Error while sending data to redcap: ", err.message);
              dumpError(err);
            }
        }

        function dumpError(err) {
          if (typeof err === 'object') {
            if (err.message) {
              console.log('\nMessage: ' + err.message);
            }
            if (err.stack) {
              console.log('\nStacktrace:');
              console.log('====================');
              console.log(err.stack);
            }
          } else {
            console.log('dumpError :: argument is not an object');
          }
        }

        SetTxtReady();
        var res = GetData();
        REDCapImportRecord(res);
      Begin Routine:
        import traceback

        #Change the text according to the selected language, function SetTxtInstr2()
        if english:
            thx.text = "Thank you for your participation!"
        else:
            thx.text = "Merci de votre participation!"

        #Get Data
        try:
            df1 = pd.DataFrame.from_dict(thisExp.getAllEntries())

            # Create all the variables we will need
            df1 = df1.assign(average_non_filler_statement1_NL="",average_non_filler_statement1_EL="",average_non_filler_statement1_A="",average_non_filler_statement1_T="",
            average_non_filler_statement2_NL="",average_non_filler_statement2_EL="",average_non_filler_statement2_A="",average_non_filler_statement2_T="",
            average_non_filler_statement3_NL="",average_non_filler_statement3_EL="",average_non_filler_statement3_A="",average_non_filler_statement3_T="",
            average_non_filler_trialDuration="",sBADE_evidence_integration="",sBADE_evidence_integration_norm_rev="",sBADE_conservatism="",sBADE_trial_duration="")

            #Select target trials
            df1 = df1.query('currentTrial > 0')
            df1.reset_index(drop=True, inplace=True)

            #We will now compute the scores
            df1["statement1_NL"] = df1['statement1_NL'].div(100)
            df1["statement1_EL"] = df1['statement1_EL'].div(100)
            df1["statement1_A"] = df1['statement1_A'].div(100)
            df1["statement1_T"] = df1['statement1_T'].div(100)

            df1["statement2_NL"] = df1['statement2_NL'].div(100)
            df1["statement2_EL"] = df1['statement2_EL'].div(100)
            df1["statement2_A"] = df1['statement2_A'].div(100)
            df1["statement2_T"] = df1['statement2_T'].div(100)

            df1["statement3_NL"] = df1['statement3_NL'].div(100)
            df1["statement3_EL"] = df1['statement3_EL'].div(100)
            df1["statement3_A"] = df1['statement3_A'].div(100)
            df1["statement3_T"] = df1['statement3_T'].div(100)

            sub_df = df1.query('Type == "non-filler"')
            sub_df.reset_index(drop=True, inplace=True)

            df1["average_non_filler_statement1_NL"] = sub_df['statement1_NL'].mean()
            df1["average_non_filler_statement1_EL"] = sub_df['statement1_EL'].mean()
            df1["average_non_filler_statement1_A"] = sub_df['statement1_A'].mean()
            df1["average_non_filler_statement1_T"] = sub_df['statement1_T'].mean()

            df1["average_non_filler_statement2_NL"] = sub_df['statement2_NL'].mean()
            df1["average_non_filler_statement2_EL"] = sub_df['statement2_EL'].mean()
            df1["average_non_filler_statement2_A"] = sub_df['statement2_A'].mean()
            df1["average_non_filler_statement2_T"] = sub_df['statement2_T'].mean()

            df1["average_non_filler_statement3_NL"] = sub_df['statement3_NL'].mean()
            df1["average_non_filler_statement3_EL"] = sub_df['statement3_EL'].mean()
            df1["average_non_filler_statement3_A"] = sub_df['statement3_A'].mean()
            df1["average_non_filler_statement3_T"] = sub_df['statement3_T'].mean()

            df1["average_non_filler_trialDuration"] = sub_df['trialDuration'].mean()
            df1["sBADE_trial_duration"] = df1['average_non_filler_trialDuration'];

            columns_sum1 = ['average_non_filler_statement1_A', 'average_non_filler_statement2_A', 'average_non_filler_statement3_A', 'average_non_filler_statement2_NL', 'average_non_filler_statement2_EL', 'average_non_filler_statement3_NL', 'average_non_filler_statement3_EL']
            df1["sBADE_evidence_integration"] = df1[columns_sum1].sum(axis=1).iloc[0] - df1['average_non_filler_statement3_T'].iloc[0]

            columns_sum2 = ['average_non_filler_statement1_NL', 'average_non_filler_statement1_EL', 'average_non_filler_statement1_T', 'average_non_filler_statement2_NL', 'average_non_filler_statement2_EL', 'average_non_filler_statement2_T', 'average_non_filler_statement3_T']
            df1["sBADE_conservatism"] = df1[columns_sum2].sum(axis=1).iloc[0]

            # Compute reverse sBADE evidence integration
            oldMax = -1
            oldMin = 7
            newMax = 1
            newMin = 0
            oldRange = oldMax-oldMin
            newRange = newMax-newMin
            oldValue = df1["sBADE_evidence_integration"].iloc[0]
            newValue = (((oldValue-oldMin)*newRange)/oldRange)+newMin
            df1["sBADE_evidence_integration_norm_rev"].iloc[0] = newValue

            #print("new df1", df1.to_string().encode('utf-8'))
            #print("df1 size: ", df1.size)

            # Save task version and date
            taskVersion = "Offline_v3.1.0"
            taskName = "iCog_BADE_stories_short"
            df1["date_exp"] = startingDate
            df1["task_version"] = taskVersion

            thisExp.addData('date_exp', df1["date_exp"].iloc[0])
            thisExp.addData('task_version', df1["task_version"].iloc[0])
            thisExp.addData('sBADE_evidence_integration', df1['sBADE_evidence_integration'].iloc[0])
            thisExp.addData('sBADE_evidence_integration_norm_rev', df1['sBADE_evidence_integration_norm_rev'].iloc[0])
            thisExp.addData('sBADE_conservatism', df1['sBADE_conservatism'].iloc[0])
            thisExp.addData('sBADE_trial_duration', df1['sBADE_trial_duration'].iloc[0])
        except Exception:
            print("An exception occurred. Error while computing scores.")
            traceback.print_exc()

        # Send data to redcap
        try:
            import requests, hashlib
            # Transform data to JSON Format
            # If we add or remove columns in the Google file, we must also change the variables here
            myDict = {}
            myDict["record_id"] = df1['participant'].iloc[0]
            myDict[redcapVars[1]] = df1['date_exp'].iloc[0]
            myDict[redcapVars[2]] = df1['task_version'].iloc[0]
            myDict[redcapVars[3]] = df1['sBADE_evidence_integration'].iloc[0]
            myDict[redcapVars[4]] = df1['sBADE_evidence_integration_norm_rev'].iloc[0]
            myDict[redcapVars[5]] = df1['sBADE_conservatism'].iloc[0]
            myDict[redcapVars[6]] = df1['sBADE_trial_duration'].iloc[0]

            data_to_send = [myDict]

            #print("data to send: ", data_to_send)

            url = 'https://portal.rimuhc.ca/cim/redcap/api/'

            redcap_data = {
                'token': redcapVars[0],
                'content': 'record',
                'format': 'json',
                'type': 'flat',
                'overwriteBehavior': 'normal',
                'forceAutoNumber': 'false',
                'data': json.dumps(data_to_send),
                'returnContent': 'ids',
                'returnFormat': 'json',
                'record_id': hashlib.sha1().hexdigest()[:16]
            }

            x = requests.post(url, data = redcap_data)

            print(x.text)
            print("Data sent to redcap.")

        except Exception:
            print("An exception occurred. Error while sending data to redcap.")
            traceback.print_exc()
    TextComponent thx
      color = $[-1,-1,-1]
      durationEstim = 2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for your participation!
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  Routine prac
    CodeComponent code_pr
      Code Type = Both
      Begin Experiment:
        mouse_clicked = False #boulean to check if the button was pressed
        import pandas as pd
        import random
      Begin JS Experiment:
        mouse_clicked = false;
        randomSliders_pr = [];
      Begin JS Routine:
        curStatement = 1; //display first statement by default
        end_text = ""; //text of ending button
        col = new util.Color('black');
        slider1_is_initialized = false; //true when we set the color of slider1..
        slider2_is_initialized = false;
        slider3_is_initialized = false;
        slider4_is_initialized = false;
        allRatings = false; //true when the user rated on all 4 sliders

        // Save results
        trialDuration_pr = -1;

        //define sliders (defining them here fix the labels position issue)
        slider1_pr = new visual.Slider({"win": win, "name": "rating", "size": [1.4, 0.03], "pos": [0, 0.01], "labels": ["0%", "100%"], "ticks": [0, 100], "granularity": 0, "style": ["rating"], "color": "Gray", "font": "Arial", "flip": false, "labelHeight": 0.03, "markerColor": [-1, -1, -1], "lineColor": "White", "barSize": [1, 0.01]});
        slider2_pr = new visual.Slider({"win": win, "name": "rating", "size": [1.4, 0.03], "pos": [0, -0.122], "labels": ["0%", "100%"], "ticks": [0, 100], "granularity": 0, "style": ["rating"], "color": "Gray", "font": "Arial", "flip": false, "labelHeight": 0.03, "markerColor": [-1, -1, -1], "lineColor": "White", "barSize": [1, 0.01]});
        slider3_pr = new visual.Slider({"win": win, "name": "rating", "size": [1.4, 0.03], "pos": [0, -0.25], "labels": ["0%", "100%"], "ticks": [0, 100], "granularity": 0, "style": ["rating"], "color": "Gray", "font": "Arial", "flip": false, "labelHeight": 0.03, "markerColor": [-1, -1, -1], "lineColor": "White", "barSize": [1, 0.01]});
        slider4_pr = new visual.Slider({"win": win, "name": "rating", "size": [1.4, 0.03], "pos": [0, -0.38], "labels": ["0%", "100%"], "ticks": [0, 100], "granularity": 0, "style": ["rating"], "color": "Gray", "font": "Arial", "flip": false, "labelHeight": 0.03, "markerColor": [-1, -1, -1], "lineColor": "White", "barSize": [1, 0.01]});

        // Shuffle the statements
        randomSliders_pr =
        [
            [0, "NL", sliderSub1, ["", "", ""] ],
            [1, "EL", sliderSub2, ["", "", ""] ],
            [2, "A", sliderSub3, ["", "", ""] ],
            [3, "T", sliderSub4, ["", "", ""] ]
        ];

        function shuffleArray(array) {
            for (let i = array.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
            }
        }

        shuffleArray(randomSliders_pr);

        //Change the text according to the selected language, function SetTxtInstr()
        function SetTxtInstr(){
            if (english){
                txt_next_pr.text = "NEXT";
                end_text = "DONE";
            }
            else{
                txt_next_pr.text = "SUIVANT";
                end_text = "COMPLÉTÉ";
            }
        }

        SetTxtInstr();
      Begin Routine:
        curStatement = 1 #display first statement by default
        end_text = "" #text of ending button
        col = 'black'
        slider1_is_initialized = False #true when we set the color of slider1..
        slider2_is_initialized = False
        slider3_is_initialized = False
        slider4_is_initialized = False
        allRatings = False #true when the user rated on all 4 sliders

        #Save results
        trialDuration_pr = -1

        #define sliders (defining them here fix the labels position issue)
        slider1_pr = visual.Slider(win=win, name='rating', size=(1.4, 0.03), pos=(0, 0.01), labels=("0%", "100%"), ticks=(0, 100), granularity=0, style=("rating"), color='Gray', font='Arial', flip = False, labelHeight= 0.03)
        slider2_pr = visual.Slider(win=win, name='rating', size=(1.4, 0.03), pos=(0, -0.122), labels=("0%", "100%"), ticks=(0, 100), granularity=0, style=("rating"), color='Gray', font='Arial', flip = False, labelHeight= 0.03)
        slider3_pr = visual.Slider(win=win, name='rating', size=(1.4, 0.03), pos=(0, -0.25), labels=("0%", "100%"), ticks=(0, 100), granularity=0, style=("rating"), color='Gray', font='Arial', flip = False, labelHeight= 0.03)
        slider4_pr = visual.Slider(win=win, name='rating', size=(1.4, 0.03), pos=(0, -0.38), labels=("0%", "100%"), ticks=(0, 100), granularity=0, style=("rating"), color='Gray', font='Arial', flip = False, labelHeight= 0.03)

        # Shuffle the statements
        randomSliders_pr = [ \
            [0, "NL", sliderSub1, ["", "", ""] ],\
            [1, "EL", sliderSub2, ["", "", ""] ],\
            [2, "A", sliderSub3, ["", "", ""] ],\
            [3, "T", sliderSub4, ["", "", ""] ]]

        random.shuffle(randomSliders_pr)

        #Change the text according to the selected language, function SetTxtInstr()
        if english:
            txt_next_pr.text = "NEXT"
            end_text = "DONE"
        else:
            txt_next_pr.text = "SUIVANT"
            end_text = "COMPLÉTÉ"
      Each Frame:
        #Prepare the initialisation of the sliders
        if slider1_is_initialized == False and statement1_pr.status == STARTED:
            slider1_is_initialized  = True
            slider2_is_initialized  = True
            slider3_is_initialized  = True
            slider4_is_initialized  = True

            sliders = (slider1_pr,slider2_pr,slider3_pr,slider4_pr)
            for slider in sliders:
                try:
                    slider.marker.color = col
                    slider.marker.size = (0.025, 0.025)
                    slider._barSize = (1, 0.01)
                    slider._onChange(True)()
                    slider._setupSlider()
                except:
                    print("An exception while initializing slider occurred")

        #Check if the user rated on all sliders
        if slider1_pr.getRating() != None and slider2_pr.getRating() != None and slider3_pr.getRating() != None and slider4_pr.getRating() != None:
            allRatings = True
        else:
            allRatings = False

        #Code that will display next instruction or go to next routine
        if next_pr.contains(mouse_pr) and mouse_pr.getPressed()[0] == True and allRatings:
            if mouse_clicked == False:
                mouse_clicked = True
                if curStatement == 1:
                    statement2_pr.setOpacity(1)
                    curStatement = 2
                    statement1_NL_pr = slider1_pr.getRating()
                    statement1_EL_pr = slider2_pr.getRating()
                    statement1_A_pr = slider3_pr.getRating()
                    statement1_T_pr = slider4_pr.getRating()
                elif curStatement == 2:
                    statement3_pr.setOpacity(1)
                    curStatement = 3
                    txt_next_pr.text = end_text
                    statement2_NL_pr = slider1_pr.getRating()
                    statement2_EL_pr = slider2_pr.getRating()
                    statement2_A_pr = slider3_pr.getRating()
                    statement2_T_pr = slider4_pr.getRating()
                else:
                    statement3_NL_pr = slider1_pr.getRating()
                    statement3_EL_pr = slider2_pr.getRating()
                    statement3_A_pr = slider3_pr.getRating()
                    statement3_T_pr = slider4_pr.getRating()
                    trialDuration_pr = t
                    continueRoutine = False #go to next routine
        else:
            mouse_clicked = False

        #Change the color of highlighed rect
        if next_pr.contains(mouse_pr):
            next_pr.opacity=0.99
            txt_next_pr.opacity=2
        else:
            next_pr.opacity=0.73
            txt_next_pr.opacity=0.73

        #Display rating of each slider
            ratings = ((slider1_pr, sliderV1_pr), (slider2_pr, sliderV2_pr), (slider3_pr, sliderV3_pr), (slider4_pr, sliderV4_pr))
            for slider_ in ratings:
                if slider_[0].getRating():
                    slider_[1].text = str(int(round(slider_[0].markerPos))) + "%"
      Each JS Frame:
        //Initialize slider
        function InitializeSlider(slider){
             try {
                slider._skin.STANDARD.MARKER_COLOR = col;
                slider._skin.MARKER_SIZE = [0.025, 0.025];
                slider._barSize = [1, 0.01];
                slider._onChange(true)();
                slider._setupSlider();
            } catch (err) {}
        }

        //Change the color of highlighed rect
        function HighlightRect(rec1, txt_rec1, mouse) {
             if (rec1.contains(mouse)) {
                rec1.setOpacity(0.99);
                txt_rec1.setOpacity(2);
             }
            else{
                rec1.setOpacity(0.73);
                txt_rec1.setOpacity(0.73);
            }
        }

        //Prepare the initialisation of the sliders
        function PrepSlidersInit(){
            if (!slider1_is_initialized && statement1_pr.status === STARTED){
                slider1_is_initialized  = true;
                slider2_is_initialized  = true;
                slider3_is_initialized  = true;
                slider4_is_initialized  = true;
                InitializeSliders();
            }
        }

        //Initialize sliders
        function InitializeSliders(){
            const array_ = [slider1_pr,slider2_pr,slider3_pr,slider4_pr];
            array_.map(x =>InitializeSlider(x));
        }

        // Check if the user rated on all sliders
        function CheckAllRatingsDone(){
            if (slider1_pr.getRating() !== undefined && slider2_pr.getRating() !== undefined && slider3_pr.getRating() !== undefined && slider4_pr.getRating() !== undefined){
                allRatings = true;
             }
         else
            allRatings = false;
        }

        //Function that will display next instruction or go to next routine
        function DisplayNext(){
            //Display next instruction
            if (next_pr.contains(mouse_pr) && mouse_pr.getPressed()[0] === 1 && allRatings){
                if (!mouse_clicked){
                    mouse_clicked = true;
                    if (curStatement === 1){
                        statement2_pr.setOpacity(1);
                        randomSliders_pr[0][3][curStatement-1] = slider1_pr.getRating();
                        randomSliders_pr[1][3][curStatement-1] = slider2_pr.getRating();
                        randomSliders_pr[2][3][curStatement-1] = slider3_pr.getRating();
                        randomSliders_pr[3][3][curStatement-1] = slider4_pr.getRating();
                        curStatement = curStatement + 1;
                    }
                    else if(curStatement === 2){
                        statement3_pr.setOpacity(1);
                        randomSliders_pr[0][3][curStatement-1] = slider1_pr.getRating();
                        randomSliders_pr[1][3][curStatement-1] = slider2_pr.getRating();
                        randomSliders_pr[2][3][curStatement-1] = slider3_pr.getRating();
                        randomSliders_pr[3][3][curStatement-1] = slider4_pr.getRating();
                        curStatement = curStatement + 1;
                        txt_next_pr.text = end_text;
                    }
                    else{
                        randomSliders_pr[0][3][curStatement-1] = slider1_pr.getRating();
                        randomSliders_pr[1][3][curStatement-1] = slider2_pr.getRating();
                        randomSliders_pr[2][3][curStatement-1] = slider3_pr.getRating();
                        randomSliders_pr[3][3][curStatement-1] = slider4_pr.getRating();
                        trialDuration_pr = t
                        continueRoutine = false; //go to next routine
                     }
                }
            }
            else{
                mouse_clicked = false;
             }
        }

        //Display ratings values:
        function DisplayRating(slider_,slider_score){
            if(slider_.getRating()){
                slider_score.text = Math.round(slider_.markerPos) + "%";
            }
        }

        //Display rating of each slider
        function DisplayRatings(){
            const array1 = [[slider1_pr, sliderV1_pr],[slider2_pr,sliderV2_pr],[slider3_pr, sliderV3_pr], [slider4_pr, sliderV4_pr]];
            array1.map(x =>DisplayRating(x[0],x[1]));
        }

        PrepSlidersInit();
        CheckAllRatingsDone();
        DisplayNext();
        HighlightRect(next_pr, txt_next_pr, mouse_pr);
        DisplayRatings();
      End JS Routine:
        // Save results

        //Save the order the statements were presented
        psychoJS.experiment.addData('slidersRandomized', randomSliders_pr);

        // Reorder array
        function sortArray(a, b) {
            if (a[0] === b[0]) {
                return 0;
            }
            else {
                return (a[0] < b[0]) ? -1 : 1;
            }
        }
        randomSliders_pr.sort(sortArray);

        for (let i=0; i<4; i++){
            let statementType = randomSliders_pr[i][1];
            for (let j=0; j<3; j++){
                let strStatement = "statement".concat((j+1).toString(),"_", statementType);
                psychoJS.experiment.addData(strStatement, randomSliders_pr[i][3][j]);
            }
        }

        psychoJS.experiment.addData('trialDuration', trialDuration_pr);

        //Reset some elements for next trial
        function ResetElements(){
            statement2_pr.setOpacity(0);
            statement3_pr.setOpacity(0);
            const array2 = [sliderV1_pr, sliderV2_pr, sliderV3_pr, sliderV4_pr];
            array2.map(x =>x.text="");
        }

        ResetElements();
      End Routine:
        import codecs
        import sys
        import io

        #Save results

        #Save the order the statements were presented
        thisExp.addData('slidersRandomized', randomSliders_pr)

        #Reorder array
        randomSliders_pr = sorted(randomSliders_pr, key=lambda x: x[0])

        for i in range(0, 4):
            statementType = randomSliders_pr[i][1]
            for j in range(0, 3):
                strStatement = "statement"+str(j+1)+"_"+ statementType
                thisExp.addData(strStatement, randomSliders_pr[i][3][j])

        thisExp.addData('trialDuration', trialDuration_pr)

        #Reset some elements for next trial
        statement2_pr.opacity=0
        statement3_pr.opacity=0
        array2 = (sliderV1_pr, sliderV2_pr, sliderV3_pr, sliderV4_pr)
        for arr in array2:
            arr.text=""
    PolygonComponent stateBox_pr
      fillColor = lightGrey
      lineColor = lightGrey
      pos = (0, 0.285)
      shape = rectangle
      size = (1.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent statement1_pr
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $state1
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    TextComponent statement2_pr
      color = black
      letterHeight = 0.03
      opacity [set every repeat] = 0
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text [set every repeat] = $state2
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    TextComponent statement3_pr
      color = black
      letterHeight = 0.03
      opacity [set every repeat] = 0
      pos = (0, 0.21)
      startVal [time (s)] = 0.0
      text [set every repeat] = $state3
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    SliderComponent slider1_pr
      color = Gray
      fillColor = Black
      forceEndRoutine = False
      granularity = 0
      labels = '0%','100%'
      letterHeight = 0.03
      pos = (0, 0.01)
      size = (1.4, 0.03)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0,100)
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    SliderComponent slider2_pr
      color = Gray
      fillColor = Black
      forceEndRoutine = False
      granularity = 0
      labels = "0%", "100%"
      letterHeight = 0.03
      pos = (0, -0.122)
      size = (1.4, 0.03)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0, 1)
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    SliderComponent slider3_pr
      color = Gray
      fillColor = Black
      forceEndRoutine = False
      granularity = 0
      labels = "0%", "100%"
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (1.4, 0.03)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0, 1)
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    SliderComponent slider4_pr
      color = Gray
      fillColor = Black
      forceEndRoutine = False
      granularity = 0
      labels = "0%", "100%"
      letterHeight = 0.03
      pos = (0, -0.38)
      size = (1.4, 0.03)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0, 1)
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    TextComponent sliderS1_pr
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos [set every repeat] = (slider1_pr.pos[0],slider1_pr.pos[1]+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $randomSliders_pr[0][2]
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    TextComponent sliderS2_pr
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos [set every repeat] = (slider2_pr.pos[0],slider2_pr.pos[1]+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $randomSliders_pr[1][2]
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    TextComponent sliderS3_pr
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos [set every repeat] = (slider3_pr.pos[0],slider3_pr.pos[1]+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $randomSliders_pr[2][2]
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    TextComponent sliderS4_pr
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos [set every repeat] = (slider4_pr.pos[0],slider4_pr.pos[1]+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $randomSliders_pr[3][2]
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    TextComponent sliderV1_pr
      color = black
      letterHeight = 0.02
      pos [set every repeat] = (slider1_pr.pos[0]+0.74, slider1_pr.pos[1])
      startVal [time (s)] = 0.0
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    TextComponent sliderV2_pr
      color = black
      letterHeight = 0.02
      pos [set every repeat] = (slider2_pr.pos[0]+0.74, slider2_pr.pos[1])
      startVal [time (s)] = 0.0
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    TextComponent sliderV3_pr
      color = black
      letterHeight = 0.02
      pos [set every repeat] = (slider3_pr.pos[0]+0.74, slider3_pr.pos[1])
      startVal [time (s)] = 0.0
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    TextComponent sliderV4_pr
      color = black
      letterHeight = 0.02
      pos [set every repeat] = (slider4_pr.pos[0]+0.74, slider4_pr.pos[1])
      startVal [time (s)] = 0.0
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    ImageComponent next_pr
      image = button.png
      opacity = 0.73
      pos = (0, -0.463)
      size = (0.25, 0.05)
      startVal [condition] = $allRatings
      texture resolution = 512
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    TextComponent txt_next_pr
      color = $[-1,-1,-1]
      letterHeight = 0.023
      pos [set every repeat] = next_pr.pos
      startVal [condition] = $allRatings
      text = NEXT
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    MouseComponent mouse_pr
      clickable = next_pr
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine ready
    CodeComponent code_rdy
      Code Type = Both
      Begin JS Routine:
        //Change the text according to the selected language, function SetTxtInstr2()
        function SetTxtReady(){
            if (english){
                txt_rdy.text = "Ready to begin?";
                txt_next_rdy.text = "BEGIN";
            }
            else{
                txt_rdy.text = "Prêt à commencer ?";
                txt_next_rdy.text = "COMMENCER";
            }
        }
        SetTxtReady();
      Begin Routine:
        #Change the text according to the selected language, function SetTxtInstr2()
        if english:
            txt_rdy.text = "Ready to begin?"
            txt_next_rdy.text = "BEGIN"
        else:
            txt_rdy.text = "Prêt à commencer ?"
            txt_next_rdy.text = "COMMENCER"
      Each Frame:
        #Change the color of highlighed rect
        if next_rdy.contains(mouse_rdy):
                next_rdy.opacity=0.99
                txt_next_rdy.opacity=2
        else:
                next_rdy.opacity=0.73
                txt_next_rdy.opacity=0.73
      Each JS Frame:
        //Change the color of highlighed rect
        function HighlightRect(rec1, txt_rec1, mouse) {
             if (rec1.contains(mouse)) {
                rec1.setOpacity(0.99);
                txt_rec1.setOpacity(2);
             }
            else{
                rec1.setOpacity(0.73);
                txt_rec1.setOpacity(0.73);
            }
        }

        HighlightRect(next_rdy, txt_next_rdy, mouse_rdy);
    TextComponent txt_rdy
      color = $[-1,-1,-1]
      durationEstim = 2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Ready to begin?
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    ImageComponent next_rdy
      image = button.png
      pos = (0, -0.15)
      size = (0.25, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent txt_next_rdy
      color = $[-1,-1,-1]
      letterHeight = 0.023
      pos [set every repeat] = next_rdy.pos
      startVal [time (s)] = 0.0
      text = NEXT
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    MouseComponent mouse_rdy
      clickable = next_rdy
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  Routine lang
  Routine instr
  LoopInitiator practices loopType="TrialHandler"
    conditionsFile = $practiceConditions
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine prac
  LoopTerminator practices
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $trialConditions
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine thanks
